// *********************
// * ImageTypes
// *********************
(FixedInternalImagePixelType "short")
(FixedImageDimension 3)
(MovingInternalImagePixelType "short")
(MovingImageDimension 3)

// *********************
// * Components
// *********************
(Registration "MultiResolutionRegistration" )
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "ReducedDimensionBSplineInterpolator")
(BSplineInterpolationOrder 1)
(Metric "VarianceOverLastDimensionMetric")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalLinearInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")
(UseDirectionCosines "true")
(ScaleGradientWithRespectToMovingImageOrientation "false")
(ReducedDimensionIndex 0)


// *********************
// * Metric settings
// *********************
(MovingImageDerivativeScales 1.0 1.0 0.0)
(SampleLastDimensionRandomly "true")
(NumSamplesLastDimension 5)
(SubtractMean "true")
(NumAdditionalSamplesFixed 0)

// *********************
// * Optimizer settings
// *********************
(NumberOfSamplesForExactGradient 20000)
(NumberOfResolutions 3)
(FinalGridSpacingInPhysicalUnits 30.0 30.0 2.0)
(GridSpacingSchedule 4.0 4.0 4.0 2.0 2.0 2.0 1.0 1.0 1.0)
(MaximumNumberOfIterations 2000)
(SP_A 20.0)
(SigmoidInitialTime 1.0)
(AutomaticParameterEstimation "true")
(UseMultiThreadingForMetrics "true")
(MaxBandCovSize 192)
(NumberOfBandStructureSamples 10)
(UseAdaptiveStepSizes "true")
(UseConstantStep "false")
(MaximumStepLengthRatio 1)
(MaximumStepLength 1.09375)
(NumberOfGradientMeasurements 0)
(NumberOfJacobianMeasurements 3996)
(SigmoidScaleFactor 0.1)
(ASGDParameterEstimationMethod "Original")

// *********************
// * Mask settings
// *********************
(ErodeMask "false")
(ErodeFixedMask "false")

// *********************
// * Transform settings
// *********************
(HowToCombineTransforms "Compose" )
(BSplineTransformSplineOrder 3)
(UseCyclicTransform "false")

// *********************
// * Pyramid settings
// *********************
(FixedImagePyramidSchedule 0 0 0 0 0 0 0 0 0)
(MovingImagePyramidSchedule 4 4 0 2 2 0 1 1 0)

// *********************
// * Sampler parameters
// *********************
(ImageSampler "Random")
(NumberOfSpatialSamples 1000)
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)
(NewSamplesEveryIteration "true")

// *********************
// * Output settings
// *********************
(WriteTransformParametersEachIteration "false" )
(WriteResultImage "true" )
(CompressResultImage "false" )
(WriteResultImageAfterEachResolution "false" )
(ShowExactMetricValue "false" )
//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)



